PsychoPy2experiment version="2020.2.10"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = time_perception
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Routines
  Routine welcomeScreen
    TextComponent welcomeText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        Press SPACE to start the experiment
    KeyboardComponent welcomeResp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine firstInterval
    ImageComponent firstImg
      image = img/stim.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t1[block]
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  Routine secondInterval
    ImageComponent secondImg
      image = img/stim.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $t2[block]
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  Routine blackScreen1
    ImageComponent blackImg1
      image = img/black.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.9
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  Routine blackScreen2
    ImageComponent blackImg2
      image = img/black.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine responseScreen
    ImageComponent responseImg
      image = img/resp.png
      saveStartStop = False
      size = (2, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent choice
      allowedKeys = '1', '2'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine endScreen
    TextComponent endText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thank you!
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  Routine blackScreen3
    TextComponent responseText
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press SPACE to initiate a new trial
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    KeyboardComponent responseRepeat
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        #initialization
        result =[]
        n = 0
        t1 = [4, 3.2, 6, 4.9]
        t2 = [5.6, 6.4, 3.6, 4.8]
        block = 0
      End Routine:
        #recording this turn
        thisExp.addData('t1', t1[block])
        thisExp.addData('t2', t2[block])
        thisExp.addData('t_differences', abs(t1[block] - t2[block]))


        #recording choice and exporting minimum distance
        if(choice.keys == '1'):
            if t1[block] <= t2[block]:
                result.append(abs(t1[block] - t2[block]))
                t1[block] += 0.3
            elif t1[block] > t2[block]:
                t1[block] -= 0.3

        elif(choice.keys == '2'):
            if t1[block] <= t2[block]:
                t1[block] -= 0.3
            elif t1[block] > t2[block]:
                result.append(abs(t1[block] - t2[block]))
                t1[block] += 0.3

        #preparing next round
        n +=1
        block = n%4

        #checking finish line
        if n == 13:
            thisExp.addData('Minimum_relative_distance', min(result))
            time_durations.finished=True
Flow
  Routine welcomeScreen
  LoopInitiator time_durations loopType="TrialHandler"
    loopType = sequential
    nReps = 1000
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    Routine firstInterval
    Routine blackScreen1
    Routine secondInterval
    Routine blackScreen2
    Routine responseScreen
    Routine blackScreen3
  LoopTerminator time_durations
  Routine endScreen
